run("Embryos (42K)");
run("Duplicate...", " ");
setOption("BlackBackground", false);
run("Make Binary");
run("Fill Holes");
run("Create Selection");
selectWindow("embryos.jpg");
run("Restore Selection");
run("ROI Manager...");
roiManager("Add");
roiManager("Split");
roiManager("Select", newArray(0,1));
roiManager("Select", 1);
roiManager("Select", newArray(1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64));
roiManager("multi-measure measure_all append");
saveAs("Results", "/home/dan/Documents/GitArchive/cvCells/x.xls");
selectWindow("Profiles");
roiManager("Multi Plot");
saveAs("Results", "/home/dan/Documents/GitArchive/cvCells/Plot Values.xls");
